PsychoPy2experiment version="2021.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $(-1.0000, -1.0000, -1.0000)
  expName = trial
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Routines
  Routine WelcomeScreen
    KeyboardComponent Key_welcome_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent Welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Welcome!

        In this experiment, you will be presented with some videos.

        Please use the mouse and click on the screen, to indicate where it was the last time that the object appear.

        If you have any questions consult the experimenter.

        Once you have understood this, press SPACEBAR to begin.
  Routine CrossFix
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
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  Routine GoodBye
    TextComponent goodbye
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating!

        Press SPACEBAR to end the experiment
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine exp_loop
  Routine Video_Trials
    MovieComponent Trial_videos
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $videos
      size = [840,460]
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        print(videos)
  Routine Image_no_background
    ImageComponent No_background_image
      image [set every repeat] = $filename_image
      size = [0.8,0.45]
      startVal [time (s)] = 0.0
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    MouseComponent Trial_response
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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Flow
  Routine WelcomeScreen
  Routine CrossFix
  LoopInitiator Loop1 loopType="TrialHandler"
    conditionsFile = VideoStimuli.xlsx
    isTrials = False
    loopType = sequential
    nReps = 2
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    conditions:
      [{'videos': 'videos/d_c_grasp.mp4', 'DrinkingPass': 'Drinking', 'CongruentIncongruent': 'Congruent'},
      {'videos': 'videos/d_in_grasp.mp4', 'DrinkingPass': 'Drinking', 'CongruentIncongruent': 'Incongruent'},
      {'videos': 'videos/pass_c_grasp.mp4', 'DrinkingPass': 'Passing', 'CongruentIncongruent': 'Congruent'},
      {'videos': 'videos/pass_in_grasp.mp4', 'DrinkingPass': 'Passing', 'CongruentIncongruent': 'Incongruent'}]
    Routine Video_Trials
    LoopInitiator trials loopType="TrialHandler"
      conditions = [{'filename_image': 'image/nobackground.png'}]
      conditionsFile = ImageStimuli.xlsx
      isTrials = False
      loopType = sequential
      nReps = 2
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      Routine Image_no_background
    LoopTerminator trials
  LoopTerminator Loop1
  Routine GoodBye
